PsychoPy2experiment version="2025.1.1"
Settings
  Experiment info = {'participant': 'test'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['paths.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  backgroundFit = fill
  backgroundImg = abstract-art-3840x2160-23159.jpg
  expName = grouping-vwm-task
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine VWM_memory_display
    RoutineSettingsComponent VWM_memory_display
      backgroundImg = abstract-art-3840x2160-23159.jpg
      useWindowParams = True
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    CodeComponent memory_sequence_code
      Code Type = Py
      Before Experiment:
        import random

        random.seed = 1

        max_eccen = 0.4

        def get_random_path_coord( coords_to_avoid ):
            # Select random x and y values that are different from those in coords_to_avoid
            x = coords_to_avoid[0]
            while abs(x - coords_to_avoid[0]) < 0.2:
               # x = round(max_eccen * random.uniform(-1, 1), 1)
                x = round(max_eccen * random.uniform(-1, 1) * 4, 0) / 4 # does this work?, YES
            y = coords_to_avoid[1]
            while abs(y - coords_to_avoid[1]) < 0.2:
                y = round(max_eccen * random.uniform(-1, 1), 1)
            coord = (x,y)
            return coord
      Begin Experiment:
        # Set path parameters
        path_length = 5
        pause_duration = 0.6 # in seconds
        retention_interval = 3.0 # 1000 ms

        # Movement speed (adjust for smoothness)
        #step_size = 0.01 # speeding up for debugging
        step_size = 0.1

        # colors
        #white = [1,1,1]
        #gray = [0,0,0]
        disc_color = [1,1,1]
      Begin Routine:
        # Get locations for this trial
        path_coords = []
        ## path coords is a list of (x,y) tuples
        for segment in range(path_length):
            if segment == 0:
                segment_coord = (0,0)
            else:
                segment_coord = get_random_path_coord(path_coords[segment-1])

            path_coords.append(segment_coord)
        #print(path_coords)

        # Initialize path steps
        segment = 0

        # set initial disc position
        disc_position = path_coords[segment]

        disc_alpha = 1
        path_end = path_coords[segment + 1]

        # start pause timer
        pause_timer = core.CountdownTimer(pause_duration)

        # add data to output
        thisExp.addData('path_coords', path_coords)
      Each Frame:
        if pause_timer.getTime() <= 0 and segment < path_length - 1:
            path_end = path_coords[segment + 1]
            # get euclidean distance
            dx = path_end[0] - disc_position[0]
            dy = path_end[1] - disc_position[1]

            distance = (dx**2 + dy**2) ** 0.5
            if distance > step_size:
                # move a small step toward the target
                new_x = disc_position[0] + dx * ( step_size / distance )
                new_y = disc_position[1] + dy * ( step_size / distance )
                if memory_type == "continuous":
                    #disc_color = white
                    disc_alpha = 1
                else:
                    #disc_color = gray
                    disc_alpha = 0
            else:
                # we've reached the target, snap to position and update segment counter
                new_x = path_end[0]
                new_y = path_end[1]
                #disc_color = white
                disc_alpha = 1
                # start pause timer
                pause_timer = core.CountdownTimer(pause_duration)
                segment = segment + 1
            disc_position = (new_x, new_y)
        elif segment >= path_length - 1 and pause_timer.getTime() <= 0:
            #disc_color = gray
            disc_alpha = 0
            continueRoutine = False  # reached last point
    PolygonComponent mem_disc
      fillColor [set every frame] = $disc_alpha
      lineColor [set every frame] = $disc_alpha
      opacity [set every frame] = disc_alpha
      pos [set every frame] = disc_position
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mem_fix
      fillColor = white
      lineColor = gray
      lineWidth = 2
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine retention
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    PolygonComponent retention_fix
      fillColor = white
      lineColor = gray
      lineWidth = 2
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $retention_interval
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  Routine VWM_memory_probe
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    CodeComponent probe_sequence_code
      Code Type = Py
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      Begin Routine:
        # Get locations for this trial

        # by default, we reprise the prior coords
        path_coords_probe = path_coords.copy() # PYTHON VARIABLES ARE DUMB
        probe_length = path_length # Int, don't need to copy.

        print(memory_type)
        print(probe_type)
        print(probe_validity)

        if probe_validity == "lure":
            if probe_type == "sequence":
                print('generating a sequence lure')
                # pick a position — range 1 to path_length-1 so center (index 0) can be swapped
                lure_pos = int(round(random.uniform(1, path_length - 1),0))
                # swap lure_pos with lure_pos-1
                path_coords_probe[lure_pos] = path_coords[lure_pos - 1]
                path_coords_probe[lure_pos - 1] = path_coords[lure_pos]

            elif probe_type == "single":
                print('generating a single lure')
                probe_length = 1
                x = round(max_eccen * random.uniform(-1, 1), 1)
                y = round(max_eccen * random.uniform(-1, 1), 1)
                lure_coords = (x,y)
                a = 1
                while a:
                    for loc in path_coords:
                        x_distance = abs(loc[0] - lure_coords[0])
                        y_distance = abs(loc[1] - lure_coords[1])
                        if x_distance < 0.2 and y_distance < 0.2:
                            x = round(max_eccen * random.uniform(-1, 1), 1)
                            y = round(max_eccen * random.uniform(-1, 1), 1)
                            lure_coords = (x,y)
                            break
                        a = 0
                path_coords_probe = [lure_coords]

        else: # probe_validity == target
            if probe_type == "single":
                print('generating a single target')
                probe_pos = int(round(random.uniform(1, path_length-1),0))
                path_coords_probe = [path_coords_probe[probe_pos]]
                probe_length = 1

        # For sequence probes: prepend (0,0) as the travel-to-start step.
        # The disc always starts at center, AND center can appear as a
        # mid-sequence location when lure_pos=1 swaps index 0 into position 1.
        if probe_type == "sequence":
            path_coords_probe = [(0,0)] + path_coords_probe
            probe_length = path_length + 1

        # Initialize path steps
        segment = 0

        # set initial disc position — always (0,0) for sequence (prepended above)
        disc_position = path_coords_probe[segment]
        disc_alpha = 1

        # start pause timer
        pause_timer = core.CountdownTimer(pause_duration)

        if probe_type == "sequence":
            path_end = path_coords_probe[segment + 1]

        if probe_type == "sequence":
            response_string = "F same                           J different"
        else:
            response_string = "F old                                  J new"

        thisExp.addData('path_coords_probe', path_coords_probe)
      Each Frame:
        if pause_timer.getTime() <= 0 and probe_type == "sequence" and segment < probe_length - 1:
            #path_end = path_coords[segment + 1]
            path_end = path_coords_probe[segment + 1]
            # get euclidean distance
            dx = path_end[0] - disc_position[0]
            dy = path_end[1] - disc_position[1]

            distance = (dx**2 + dy**2) ** 0.5
            if distance > step_size:
                # move a small step toward the target
                new_x = disc_position[0] + dx * ( step_size / distance )
                new_y = disc_position[1] + dy * ( step_size / distance )
                if memory_type == "continuous":
                    #disc_color = white
                    disc_alpha = 1
                else:
                    #disc_color = gray
                    disc_alpha = 0
            else:
                # we've reached the target, snap to position and update segment counter
                new_x = path_end[0]
                new_y = path_end[1]
                #disc_color = white
                disc_alpha = 1
                # start pause timer
                pause_timer = core.CountdownTimer(pause_duration)
                segment = segment + 1
            disc_position = (new_x, new_y)
        elif segment >= probe_length - 1 and pause_timer.getTime() <= 0:
            #disc_color = gray
            disc_alpha = 0
            continueRoutine = False  # reached last point
    PolygonComponent probe_disc
      fillColor [set every frame] = $disc_alpha
      lineColor [set every frame] = $disc_alpha
      opacity [set every frame] = disc_alpha
      pos [set every frame] = disc_position
      shape = circle
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent probe_fix
      fillColor = white
      lineColor = gray
      lineWidth = 2
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine VWM_response
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    TextComponent response_cue
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ?
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    TextComponent response_instructions
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $response_string
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    KeyboardComponent key_resp_VWM
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = 1
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    PolygonComponent ITI_fix
      fillColor = white
      lineColor = gray
      lineWidth = 2
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine single_probe_instructions
    RoutineSettingsComponent single_probe_instructions
      color = 0.0000, 0.0000, 0.0000
      skipIf = current_block != 'single'
      useWindowParams = True
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    TextComponent text_single_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will remember the locations of a disc. On some trials, the disc will move from place to place, pausing at each corner. On other trials, the disc will "jump" to different locations.

        After the disc returns to the cross, there will be a brief pause, and then the disc will appear at a single location. Your task is to determine whether that location is one of you've seen the disc at before (press "F") or is different (press "J").

        Press space to continue to this part of the experiment.
    KeyboardComponent key_resp_single_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine sequence_probe_instructions
    RoutineSettingsComponent sequence_probe_instructions
      skipIf = current_block != 'sequence' 
      useWindowParams = True
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    TextComponent text_seq_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will remember the locations of a disc. On some trials, the disc will move from place to place, pausing at each corner. On other trials, the disc will appear at individual locations, but you will not see it move.

        After the series of locations, there will be a brief pause, and then the disc will move again. Your task is to determine whether sequence of locations is the same as previously (press "F") or is different (press "J").

        Press space to continue to this part of the experiment.
    KeyboardComponent key_resp_seq_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine thank_you
    RoutineSettingsComponent thank_you
      useWindowParams = True
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    TextComponent ty
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The experiment is now complete.


        Thank you for your participation!
  Routine set_block_order
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        block_order = random.sample(['single', 'sequence'], 2)
        # e.g. ['sequence', 'single'] or ['single', 'sequence']
        thisExp.addData('block_order', block_order)  # saved to data file
  Routine advance_block
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        current_block_idx = 0
      Begin Routine:
        current_block = block_order[current_block_idx]
        current_block_idx += 1
        single_nreps = 10 if current_block == 'single' else 0
        seq_nreps = 10 if current_block == 'sequence' else 0
        continueRoutine = False
  Routine break_2
    RoutineSettingsComponent break_2
      useWindowParams = True
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    TextComponent break_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = press space to continue
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    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine set_block_order
  Routine advance_block
  Routine single_probe_instructions
  Routine ITI
  LoopInitiator trials_single_probe loopType="TrialHandler"
    conditionsFile = experiment_control_files/trial-types_single-probe_2025-12-09.csv
    loopType = fullRandom
    nReps = single_nreps
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'single'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'single'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'single'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'single'), ('probe_validity', 'lure')])]
    Routine VWM_memory_display
    Routine retention
    Routine VWM_memory_probe
    Routine VWM_response
    Routine break_2
    Routine ITI
  LoopTerminator trials_single_probe
  Routine sequence_probe_instructions
  Routine ITI
  LoopInitiator trials_sequence_probe loopType="TrialHandler"
    conditionsFile = experiment_control_files/trial-types_sequence-probe_2025-12-09.csv
    loopType = fullRandom
    nReps = seq_nreps
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'sequence'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'sequence'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'sequence'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'sequence'), ('probe_validity', 'lure')])]
    Routine VWM_memory_display
    Routine retention
    Routine VWM_memory_probe
    Routine VWM_response
    Routine break_2
    Routine ITI
  LoopTerminator trials_sequence_probe
  Routine advance_block
  Routine single_probe_instructions
  Routine ITI
  LoopInitiator trials_single_probe2 loopType="TrialHandler"
    conditionsFile = experiment_control_files/trial-types_single-probe_2025-12-09.csv
    loopType = fullRandom
    nReps = single_nreps
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'single'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'single'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'single'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'single'), ('probe_validity', 'lure')])]
    Routine VWM_memory_display
    Routine retention
    Routine VWM_memory_probe
    Routine VWM_response
    Routine break_2
    Routine ITI
  LoopTerminator trials_single_probe2
  Routine sequence_probe_instructions
  Routine ITI
  LoopInitiator trials_sequence_probe2 loopType="TrialHandler"
    conditionsFile = experiment_control_files/trial-types_sequence-probe_2025-12-09.csv
    loopType = fullRandom
    nReps = seq_nreps
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    conditions:
      [OrderedDict([('memory_type', 'continuous'), ('probe_type', 'sequence'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'sequence'), ('probe_validity', 'target')]),
      OrderedDict([('memory_type', 'continuous'), ('probe_type', 'sequence'), ('probe_validity', 'lure')]),
      OrderedDict([('memory_type', 'discrete'), ('probe_type', 'sequence'), ('probe_validity', 'lure')])]
    Routine VWM_memory_display
    Routine retention
    Routine VWM_memory_probe
    Routine VWM_response
    Routine break_2
    Routine ITI
  LoopTerminator trials_sequence_probe2
  Routine thank_you
